PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = class_demo_redlight_greenlight
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Routines
  Routine instr
    TextComponent instr_text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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      text:
        The game that you are about to play is called Red Light, Green Light. You will see a rapid serial presentation of two dolls - one facing forward and the other facing backwards. Whenever you see a doll facing backwards ("Green Light"), you will respond by pressing the space bar as quickly as you can. Whenever you see a doll facing forwards ("Red Light"), you will withhold responding.

        When you're ready, please press the spacebar to begin!
    KeyboardComponent intr_kb
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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  Routine trial
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        # Approach 1 (simple hard-coding):
        #im_sequence = ["resources\squid_game_doll_backward", "resources\squid_game_doll_backward", "resources\squid_game_doll_backward", "resources\squid_game_doll_forward"]

        # Approach 3 (using indexing):
        sequence = [0, 0, 0, 0, 1, 0, 1, 0, 0, 0, 1, 0, 1, 0, 0, 0, 1, 1, 0, 0]
        image_names = ["resources\squid_game_doll_backward","resources\squid_game_doll_forward"]

        im_sequence = []
        for i in sequence:
            im_sequence.append(image_names[i])

        # Specify the nReps:
        seq_len = len(sequence)
      Begin Routine:
        doll_im_path = im_sequence[trials.thisRepN]
    ImageComponent doll_im
      image [set every repeat] = $doll_im_path
      size = (0.35, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    KeyboardComponent task_kb
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
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  Routine feedback
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        # Grabs the keys for task_kb
        task_kb_keys = trials.data['task_kb.keys']

        # Counts of commission errors and nogo trials
        commission_error_count = 0
        nogo_count = 0
        for i in range(len(task_kb_keys[0])):
            # Checks if it is a nogo trial
            if sequence[i] == 1:
                nogo_count += 1
                # Checks if a space was pressed (and it was a nogo trial)
                if task_kb_keys[0][i] == 'space':
                    commission_error_count += 1

        # Calculate commision error rate based on counts
        commission_error_rate = commission_error_count/nogo_count

        # build the feedback string
        feedback_str = 'Commission error rate: ' + str(commission_error_rate)
    TextComponent fb_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      text [set every repeat] = $feedback_str
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    KeyboardComponent fb_kb
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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Flow
  Routine instr
  LoopInitiator trials_2 loopType="TrialHandler"
    loopType = random
    nReps = 2
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    LoopInitiator trials loopType="TrialHandler"
      loopType = random
      nReps = seq_len
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      Routine trial
    LoopTerminator trials
    Routine feedback
  LoopTerminator trials_2
