PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant': '', 'hit_outcome': '1', 'fa_outcome': '0', 'hits_goal': '20', 'num_go_trials': '200', 'num_nogo_trials': '100'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = redlight_greenlight_casino_final
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Routines
  Routine instr
    TextComponent instr_text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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      text:
        The game that you are about to play is called Red Light, Green Light. You will see a rapid serial presentation of two dolls - one facing forward and the other facing backwards. Whenever you see a doll facing backwards ("Green Light"), you will respond by pressing the space bar as quickly as you can. Whenever you see a doll facing forwards ("Red Light"), you will withhold responding.

        When you're ready, please press the spacebar to begin!
    KeyboardComponent intr_kb
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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  Routine trial
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        # Import these modules:
        import random

        # Create list sequence of 1's and 0's:
        num_0s = int(expInfo['num_go_trials'])
        num_1s = int(expInfo['num_nogo_trials'])
        sequence = []
        for i in range(num_0s):
            sequence.append(0)
        for i in range(num_1s):
            sequence.append(1)

        # Randomize the sequence:
        random.shuffle(sequence)

        # Translate sequence to its corresponding image:
        image_names = ["resources/squid_game_doll_backward","resources/squid_game_doll_forward"]
        im_sequence = []
        for i in sequence:
            im_sequence.append(image_names[i])

        # Some specifications:
        seq_len = len(sequence) # specify the nReps
        distance_counter = 0    # initiate distance counter
        distance_goal = int(expInfo['hits_goal'])      # specify "distance" goal (aka number of hits)

        min_w = .14             # min or starting width of the doll
        min_h = .2              # min or starting height

        max_w = .56             # max or ending width
        max_h = .8              # max or ending height

        inc_w = (max_w - min_w)/distance_goal   # calculate a sensible increment (how much to increase by with each hit?)
        inc_h = (max_h - min_h)/distance_goal

        # Audio Object
        background_sound = sound.Sound('resources\pink_soldiers_song.wav')
      Begin Routine:
        # grab the im path for this trial
        doll_im_path = im_sequence[trials.thisRepN]

        # update doll im size
        im_w = min_w + distance_counter*inc_w
        im_h = min_h + distance_counter*inc_h


        # start song if previous run has not finished
        if background_sound.status != 1:
            background_sound.play()
      End Routine:
        # update distance counter
        if sequence[trials.thisRepN] == 0 and task_kb.keys == 'space':      # test for HIT
            distance_counter = distance_counter + int(expInfo['hit_outcome'])
        elif sequence[trials.thisRepN] == 1 and task_kb.keys == 'space':    # test for FA
            if expInfo['fa_outcome'] == "beginning":
                distance_counter = 0
            else:
                if distance_counter >= int(expInfo['fa_outcome']):
                    distance_counter = distance_counter - int(expInfo['fa_outcome'])
                else:
                    distance_counter = 0


        print(distance_counter)

        # if dist counter == dist goal, end loop
        if distance_counter == distance_goal:
            background_sound.stop()
            trials.finished = True
    ImageComponent doll_im
      image [set every repeat] = $doll_im_path
      size [set every repeat] = [im_w, im_h]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
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    KeyboardComponent task_kb
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.6
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  Routine feedback
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        # Grabs the keys for task_kb
        task_kb_keys = trials.data['task_kb.keys']

        # Counts of commission errors and nogo trials
        commission_error_count = 0
        nogo_count = 0
        for i in range(len(task_kb_keys[0])):
            # Checks if it is a nogo trial
            if sequence[i] == 1:
                nogo_count += 1
                # Checks if a space was pressed (and it was a nogo trial)
                if task_kb_keys[0][i] == 'space':
                    commission_error_count += 1

        # Calculate commision error rate based on counts
        commission_error_rate = commission_error_count/nogo_count

        # build the feedback string
        feedback_str = 'Commission error rate: ' + str(commission_error_rate)
    TextComponent fb_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      text [set every repeat] = $feedback_str
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    KeyboardComponent fb_kb
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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  Routine game_over
    PolygonComponent polygon
      fillColor = $(0.7255, -0.8431, -0.5294)
      shape = rectangle
      size = (3,3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    ImageComponent angry_doll_im
      image = resources\squid_game_doll_angry.png
      size [set every repeat] = [im_w, im_h]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        continueRoutine = False
        if sequence[trials.thisRepN] == 1 and task_kb.keys == 'space':    # test for FA
            continueRoutine = True
  Routine congratulations
    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Experiment:
        import random
        # Random number of iterations
        congrats_nReps = random.randrange(70,73)
      Begin Routine:
        # Define the opacities of the 3 shapes depending on trial num
        if congrats_loop.thisRepN % 3 == 0:
            opacities = [0.5, 0.5, 1]
        elif congrats_loop.thisRepN % 3 == 1:
            opacities = [0.5, 1, 0.5]
        elif congrats_loop.thisRepN % 3 == 2:
            opacities = [1, 0.5, 0.5]

        # Assign the opacity variable to its respective values
        opacity_circle = opacities[0]
        opacity_star = opacities[1]
        opacity_triangle = opacities[2]


        # Audio
        if congrats_loop.thisRepN == 0:
            casino_sound = sound.Sound('resources\casino_sound.wav')
            casino_sound.play()
    ImageComponent circle
      image = resources\dalgona_circle.png
      opacity [set every repeat] = opacity_circle
      pos = (-0.5, 0)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
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    ImageComponent star
      image = resources\dalgona_star.png
      opacity [set every repeat] = opacity_star
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
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    ImageComponent triangle
      image = resources\dalgona_triangle.png
      opacity [set every repeat] = opacity_triangle
      pos = (0.5, 0)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
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    TextComponent next_game
      letterHeight = 0.04
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
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      text:
        Congratulations. You have passed the first game.

        Please select a shape for the next game...
  Routine congratulations_static
    ImageComponent circle_2
      image = resources\dalgona_circle.png
      opacity [set every repeat] = opacity_circle
      pos = (-0.5, 0)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    ImageComponent star_2
      image = resources\dalgona_star.png
      opacity [set every repeat] = opacity_star
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    ImageComponent triangle_2
      image = resources\dalgona_triangle.png
      opacity [set every repeat] = opacity_triangle
      pos = (0.5, 0)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    TextComponent next_game_2
      letterHeight = 0.04
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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      text:
        Congratulations. You have passed the first game.

        Please select a shape for the next game...
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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Flow
  Routine instr
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = seq_len
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    Routine trial
    Routine game_over
  LoopTerminator trials
  LoopInitiator congrats_loop loopType="TrialHandler"
    loopType = random
    nReps = congrats_nReps
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    Routine congratulations
  LoopTerminator congrats_loop
  Routine congratulations_static
