PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = visual_memory_template
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Routines
  Routine instr
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Welcome!

        Categorize the images:
        1=Animal
        2=Produce
        3=Tool
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        # import random and seed with participant id
        import random
        random.seed(expInfo['participant'])

        # Import stimuli_list
        stimuli_list = data.importConditions('stimuli_list.xlsx')

        animal_images = list()
        tool_images = list()
        produce_images = list()
        for item in stimuli_list:
            animal_images.append(item['Animal_Image_Files'])
            tool_images.append(item['Tool_Image_Files'])
            produce_images.append(item['Produce_Image_Files'])

        # Select three from each category to be encoded:
        random.shuffle(animal_images)
        random.shuffle(tool_images)
        random.shuffle(produce_images)
        phase_1_animals = animal_images[0:3]
        phase_1_tools = tool_images[0:3]
        phase_1_produce = produce_images[0:3]

        # Build the phase_1_sequence:
        phase_1_sequence = list()
        for im in phase_1_animals:
            phase_1_sequence.append(im)
        for im in phase_1_tools:
            phase_1_sequence.append(im)
        for im in phase_1_produce:
            phase_1_sequence.append(im)
        random.shuffle(phase_1_sequence)

        # Build the phase_2_sequence:
        phase_2_sequence = list()
        for im in animal_images:
            phase_2_sequence.append(im)
        for im in tool_images:
            phase_2_sequence.append(im)
        for im in produce_images:
            phase_2_sequence.append(im)
        random.shuffle(phase_2_sequence)
    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine encoding
    CodeComponent set_image
      Code Type = Auto->JS
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      Begin Routine:
        encoding_im = phase_1_sequence[phase_1.thisRepN]
    ImageComponent encoding_image
      image [set every repeat] = $encoding_im
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    KeyboardComponent encoding_kb
      allowedKeys = '1','2','3'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.5
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    CodeComponent encoding_logging
      Code Type = Auto->JS
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      Begin Experiment:
        import pandas as pd

        # initiate this
        encoding_session_list = list()
      End Routine:
        encoding_resp = encoding_kb.keys
        encoding_rt = encoding_kb.rt

        encoding_trial_list = [encoding_im, encoding_resp, encoding_rt]

        encoding_session_list.append(encoding_trial_list)
  Routine random_task
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text:
        delay task?

        next test - memory

        1=old
        2=new
    KeyboardComponent key_resp_3
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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  Routine memory
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        memory_im = phase_2_sequence[phase_2.thisRepN]
    ImageComponent memory_image
      image [set every repeat] = $memory_im
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    KeyboardComponent memory_kb
      allowedKeys = '1','2'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Experiment:
        memory_session_list = list()
      End Routine:
        memory_resp = memory_kb.keys
        memory_rt = memory_kb.rt

        memory_trial_list = [memory_im, memory_resp, memory_rt]

        memory_session_list.append(memory_trial_list)
  Routine finished
    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        you finished
    CodeComponent write_data
      Code Type = Auto->JS
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      Begin Routine:
        # Write encoding data
        session_df = pd.DataFrame(encoding_session_list,
                                 columns = ["encoding_im", "encoding_resp", "encoding_rt"])

        output_filepath = 'sub-' + expInfo['participant'] + '_encoding.csv'

        session_df.to_csv(output_filepath)

        # Write memory data
        session_df = pd.DataFrame(memory_session_list,
                                 columns = ["memory_im", "memory_resp", "memory_rt"])

        output_filepath = 'sub-' + expInfo['participant'] + '_memory.csv'

        session_df.to_csv(output_filepath)
Flow
  Routine instr
  LoopInitiator phase_1 loopType="TrialHandler"
    loopType = random
    nReps = 9
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    Routine encoding
  LoopTerminator phase_1
  Routine random_task
  LoopInitiator phase_2 loopType="TrialHandler"
    loopType = random
    nReps = 18
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    Routine memory
  LoopTerminator phase_2
  Routine finished
